
run("Gaussian Blur...", "sigma=2");
run("Auto Threshold", "method=Huang white");
run("Analyze Particles...", "size=20.00-Infinity show=Nothing clear add");
run("Set Measurements...", "area mean integrated display redirect=None decimal=3");
run("Analyze Particles...", "size=20-Infinity clear add");
roiManager("Deselect");
run("In [+]");
run("In [+]");
run("In [+]");
run("In [+]");
run("Out [-]");
run("Out [-]");
roiManager("Select", 12);
roiManager("Show None");
roiManager("Select", 0);
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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264));
selectImage("C1-BBB_PFC_2J_slice1_001-MaxIP.nd2");
roiManager("Select", 259);
roiManager("Select", 264);
roiManager("Select", 263);
roiManager("Select", 258);
roiManager("Select", 254);
roiManager("Show All");
run("In [+]");
run("In [+]");
run("In [+]");
run("In [+]");
run("Out [-]");
run("Out [-]");
run("Out [-]");
run("Out [-]");
run("Out [-]");
roiManager("Deselect");
roiManager("Select", 0);
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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264));
roiManager("Combine");
roiManager("Add");
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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263));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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262));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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261));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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260));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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259));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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258));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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257));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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256));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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255));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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254));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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253));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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252));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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251));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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250));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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249));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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248));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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247));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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246));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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245));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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244));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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243));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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242));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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241));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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240));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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239));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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238));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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237));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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236));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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235));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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234));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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233));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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232));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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231));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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230));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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229));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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228));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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227));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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226));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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225));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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224));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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223));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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222));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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221));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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220));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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219));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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218));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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217));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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216));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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215));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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214));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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213));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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212));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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211));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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210));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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209));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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208));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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207));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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206));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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205));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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204));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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203));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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202));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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201));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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200));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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199));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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198));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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197));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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196));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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195));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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194));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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193));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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192));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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191));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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190));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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189));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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188));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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187));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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186));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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185));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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184));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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183));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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182));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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181));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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180));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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179));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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178));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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177));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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176));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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175));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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174));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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173));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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172));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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171));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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170));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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169));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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168));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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167));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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166));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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165));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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164));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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163));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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162));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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161));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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160));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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159));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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158));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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157));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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156));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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155));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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154));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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153));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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152));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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151));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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150));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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149));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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148));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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147));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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146));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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145));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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144));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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143));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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142));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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141));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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140));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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139));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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138));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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137));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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136));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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135));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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134));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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133));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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132));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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131));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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130));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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129));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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128));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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127));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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126));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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125));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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124));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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123));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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122));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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121));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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120));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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119));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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118));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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117));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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116));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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115));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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114));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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113));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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112));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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111));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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110));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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109));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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108));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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107));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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106));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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105));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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104));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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103));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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102));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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101));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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100));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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99));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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98));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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97));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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96));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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95));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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94));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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93));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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92));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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91));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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90));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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89));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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88));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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87));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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86));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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85));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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84));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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83));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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82));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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81));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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80));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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79));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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78));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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77));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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76));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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75));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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74));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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73));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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72));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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71));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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70));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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69));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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68));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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67));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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66));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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65));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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64));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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63));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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62));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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61));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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60));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21,22,23,24,25,26,27,28,29,30,31,32,33,34,35,36,37,38,39,40,41,42,43,44,45,46,47,48,49,50,51,52,53,54,55,56,57,58,59));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21,22,23,24,25,26,27,28,29,30,31,32,33,34,35,36,37,38,39,40,41,42,43,44,45,46,47,48,49,50,51,52,53,54,55,56,57,58));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21,22,23,24,25,26,27,28,29,30,31,32,33,34,35,36,37,38,39,40,41,42,43,44,45,46,47,48,49,50,51,52,53,54,55,56,57));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21,22,23,24,25,26,27,28,29,30,31,32,33,34,35,36,37,38,39,40,41,42,43,44,45,46,47,48,49,50,51,52,53,54,55,56));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21,22,23,24,25,26,27,28,29,30,31,32,33,34,35,36,37,38,39,40,41,42,43,44,45,46,47,48,49,50,51,52,53,54,55));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21,22,23,24,25,26,27,28,29,30,31,32,33,34,35,36,37,38,39,40,41,42,43,44,45,46,47,48,49,50,51,52,53,54));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21,22,23,24,25,26,27,28,29,30,31,32,33,34,35,36,37,38,39,40,41,42,43,44,45,46,47,48,49,50,51,52,53));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21,22,23,24,25,26,27,28,29,30,31,32,33,34,35,36,37,38,39,40,41,42,43,44,45,46,47,48,49,50,51,52));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21,22,23,24,25,26,27,28,29,30,31,32,33,34,35,36,37,38,39,40,41,42,43,44,45,46,47,48,49,50,51));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21,22,23,24,25,26,27,28,29,30,31,32,33,34,35,36,37,38,39,40,41,42,43,44,45,46,47,48,49,50));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21,22,23,24,25,26,27,28,29,30,31,32,33,34,35,36,37,38,39,40,41,42,43,44,45,46,47,48,49));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21,22,23,24,25,26,27,28,29,30,31,32,33,34,35,36,37,38,39,40,41,42,43,44,45,46,47,48));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21,22,23,24,25,26,27,28,29,30,31,32,33,34,35,36,37,38,39,40,41,42,43,44,45,46,47));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21,22,23,24,25,26,27,28,29,30,31,32,33,34,35,36,37,38,39,40,41,42,43,44,45,46));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21,22,23,24,25,26,27,28,29,30,31,32,33,34,35,36,37,38,39,40,41,42,43,44,45));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21,22,23,24,25,26,27,28,29,30,31,32,33,34,35,36,37,38,39,40,41,42,43,44));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21,22,23,24,25,26,27,28,29,30,31,32,33,34,35,36,37,38,39,40,41,42,43));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21,22,23,24,25,26,27,28,29,30,31,32,33,34,35,36,37,38,39,40,41,42));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21,22,23,24,25,26,27,28,29,30,31,32,33,34,35,36,37,38,39,40,41));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21,22,23,24,25,26,27,28,29,30,31,32,33,34,35,36,37,38,39,40));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21,22,23,24,25,26,27,28,29,30,31,32,33,34,35,36,37,38,39));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21,22,23,24,25,26,27,28,29,30,31,32,33,34,35,36,37,38));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21,22,23,24,25,26,27,28,29,30,31,32,33,34,35,36,37));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21,22,23,24,25,26,27,28,29,30,31,32,33,34,35,36));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21,22,23,24,25,26,27,28,29,30,31,32,33,34,35));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21,22,23,24,25,26,27,28,29,30,31,32,33,34));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21,22,23,24,25,26,27,28,29,30,31,32,33));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21,22,23,24,25,26,27,28,29,30,31,32));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21,22,23,24,25,26,27,28,29,30,31));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21,22,23,24,25,26,27,28,29,30));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21,22,23,24,25,26,27,28,29));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21,22,23,24,25,26,27,28));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21,22,23,24,25,26,27));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21,22,23,24,25,26));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21,22,23,24,25));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21,22,23,24));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21,22,23));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21,22));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,12,13,14));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,12,13));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,12));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9));
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8));
roiManager("Select", newArray(0,1,2,3,4,5,6,7));
roiManager("Select", newArray(0,1,2,3,4,5,6));
roiManager("Select", newArray(0,1,2,3,4,5));
roiManager("Select", newArray(0,1,2,3,4));
roiManager("Select", newArray(0,1,2,3));
roiManager("Select", newArray(0,1,2));
roiManager("Select", newArray(0,1));
roiManager("Select", 0);
roiManager("Delete");
roiManager("Select", 0);
roiManager("Measure");
run("In [+]");
run("In [+]");
run("In [+]");
run("In [+]");
run("In [+]");
run("Out [-]");
run("In [+]");
run("In [+]");
run("Out [-]");
makeRectangle(1564, 797, 55, 41);
roiManager("Add");
run("Measure");
makeRectangle(1768, 673, 3, 1);
run("Out [-]");
run("Out [-]");
run("Out [-]");
run("Out [-]");
run("Out [-]");
run("Select None");
roiManager("Show None");
run("Histogram");
Table.showHistogramTable;
makeRectangle(34, 37, 4, 3);
run("Select path");
open("F:/Lilian/Post-doc Columbia/Imaging/Confocal/BBB_PFC_M/05102026/2J/BBB_PFC_2J_slice1_002-MaxIP.nd2");
selectImage("BBB_PFC_2J_slice1_002-MaxIP.nd2 - C=0");
selectImage("BBB_PFC_2J_slice1_002-MaxIP.nd2 - C=1");
selectImage("BBB_PFC_2J_slice1_002-MaxIP.nd2 - C=0");
makeRectangle(1096, 1228, 28, 58);
run("Measure");
run("Histogram");
selectWindow("Recorder");
