CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:33
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (file does contain "MaxIP") (directory doesnot containregexp "[\\\\/]\\.")

Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:orig
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    Set intensity range from:Image bit-depth
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Crop:[module_num:5|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enabled:False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
    Select the input image:orig
    Name the output image:CropOrig
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:1024,1536
    Top and bottom rectangle positions:1024,1536
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    Remove empty rows and columns?:All
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
ColorToGray:[module_num:6|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
    Select the input image:orig
    Conversion method:Split
    Image type:Channels
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    Channel count:3
    Channel number:1
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    Image name:DAPI
    Channel number:2
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    Image name:GFAP
    Channel number:3
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    Image name:Iba1

Threshold:[module_num:7|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enabled:False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
    Select the input image:TH
    Name the output image:ThresholdTH
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:20
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
ConvertImageToObjects:[module_num:8|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enabled:False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
    Select the input image:ThresholdTH
    Name the output object:TH_Objects
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

MeasureImageAreaOccupied:[module_num:9|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enabled:False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
    Measure the area occupied by:Binary Image
    Select binary images to measure:ThresholdTH
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
MaskImage:[module_num:10|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enabled:False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
    Select the input image:GFAP
    Name the output image:MaskedGFAP
    Use objects or an image as a mask?:Image
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    Select image for mask:ThresholdTH
    Invert the mask?:No

MaskImage:[module_num:11|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enabled:False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
    Select the input image:DAPI
    Name the output image:MaskedDAPI
    Use objects or an image as a mask?:Image
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    Select image for mask:ThresholdTH
    Invert the mask?:No

MaskImage:[module_num:12|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enabled:False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
    Select the input image:Iba1
    Name the output image:MaskedIba1
    Use objects or an image as a mask?:Image
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    Select image for mask:ThresholdTH
    Invert the mask?:No

MeasureImageIntensity:[module_num:13|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
    Select images to measure:GFAP
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
ConvertImageToObjects:[module_num:14|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enabled:False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
    Select the input image:ThresholdTH
    Name the output object:THObjects
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

IdentifyPrimaryObjects:[module_num:15|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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:2
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
ExpandOrShrinkObjects:[module_num:16|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
    Select the input objects:Nuclei
    Name the output objects:ExpandedNuclei
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:3
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
IdentifyTertiaryObjects:[module_num:17|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
    Select the larger identified objects:ExpandedNuclei
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:PerinuclearRing
    Shrink smaller object prior to subtraction?:Yes

Threshold:[module_num:18|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
    Select the input image:GFAP
    Name the output image:ThresholdGFAP_SN
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.5
    Threshold correction factor:1.5
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Minimum Cross-Entropy

ConvertImageToObjects:[module_num:19|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
    Select the input image:ThresholdGFAP_SN
    Name the output object:GFAP_SN
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

MeasureImageAreaOccupied:[module_num:20|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
    Measure the area occupied by:Binary Image
    Select binary images to measure:ThresholdGFAP_SN
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
MeasureObjectIntensity:[module_num:21|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
    Select images to measure:Iba1
    Select objects to measure:PerinuclearRing

FilterObjects:[module_num:22|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
    Select the objects to filter:PerinuclearRing
    Name the output objects:Iba1PosCells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_Iba1
    Filter using a minimum measurement value?:Yes
    Minimum value:0.012
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0
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
IdentifySecondaryObjects:[module_num:23|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enabled:False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
    Select the input objects:Nuclei
    Name the objects to be identified:GFAPCells
    Select the method to identify the secondary objects:Propagation
    Select the input image:GFAP
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
ExportToSpreadsheet:[module_num:24|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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
GrayToColor:[module_num:25|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
    Select a color scheme:Composite
    Rescale intensity:Yes
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    Name the output image:Orig3Color
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    Hidden:3
    Image name:Iba1
    Color:#ff0000
    Weight:1.0
    Image name:GFAP
    Color:#00ff00
    Weight:1.0
    Image name:DAPI
    Color:#0000ff
    Weight:1.0

GrayToColor:[module_num:26|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
    Select a color scheme:Composite
    Rescale intensity:Yes
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    Name the output image:Orig2Color
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    Hidden:2
    Image name:Iba1
    Color:#ff0000
    Weight:1.0
    Image name:GFAP
    Color:#00ff00
    Weight:1.0

GrayToColor:[module_num:27|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
    Select a color scheme:Composite
    Rescale intensity:Yes
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    Name the output image:OrigIba1
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    Hidden:1
    Image name:Iba1
    Color:#ff0000
    Weight:1.0

DisplayDataOnImage:[module_num:28|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
    Display object or image measurements?:Object
    Select the input objects:PerinuclearRing
    Measurement to display:Intensity_MeanIntensity_Iba1
    Select the image on which to display the measurements:OrigIba1
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    Name the output image that has the measurements displayed:DisplayImage
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    Image elements to save:Figure
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    Display mode:Color
    Color map:Default
    Display background image?:Yes
    Color map scale:Use this image's measurement range
    Color map range:0.0,1.0
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
SaveImages:[module_num:29|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
    Select the type of image to save:Image
    Select the image to save:DisplayImage
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:Iba1Meas_
    Number of digits:4
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    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

OverlayOutlines:[module_num:30|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Orig3Color
    Name the output image:Overlay_3color
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:blue
    Select objects to display:Nuclei
    Select outline color:cyan
    Select objects to display:Iba1PosCells
    Select outline color:magenta
    Select objects to display:GFAP_SN

OverlayOutlines:[module_num:31|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Orig2Color
    Name the output image:Overlay_2color
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:blue
    Select objects to display:Nuclei
    Select outline color:cyan
    Select objects to display:Iba1PosCells
    Select outline color:magenta
    Select objects to display:GFAP_SN

SaveImages:[module_num:32|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
    Select the type of image to save:Image
    Select the image to save:Overlay_2color
    Select method for constructing file names:From image filename
    Select image name for file prefix:orig
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_overlay2color
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:33|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
    Select the type of image to save:Image
    Select the image to save:Overlay_3color
    Select method for constructing file names:From image filename
    Select image name for file prefix:orig
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_overlay3color
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
